PsychoPy2experiment version="2023.2.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pilotv1
  keyboardBackend = ioHub
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Routines
  Routine stim
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    ImageComponent image
      image [set every repeat] = $stimfile
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .25
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    PolygonComponent fixCrossR_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .25
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  Routine Intro
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = The experiment will begin soon.
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  Routine delay
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    PolygonComponent fixCrossR_4
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .25
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  Routine response
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    PolygonComponent fixCrossR_3
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent resp_1
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-.6, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp1
      units = norm
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    TextComponent resp_2
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.2, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp2
      units = norm
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    TextComponent resp_3
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-.2, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp3
      units = norm
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    TextComponent resp_4
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.6, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp4
      units = norm
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    TextComponent resp_7
      color [set every repeat] = white
      letterHeight = 0.05
      pos = -.6, -.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp7
      units = norm
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    TextComponent resp_8
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.6, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp8
      units = norm
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    TextComponent resp_9
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.2, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp9
      units = norm
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    TextComponent resp_0
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-.2, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp0
      units = norm
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    KeyboardComponent kb
      allowedKeys = '1','2','3','4','5','6','7','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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    CodeComponent changecolour
      Code Type = Auto->JS
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      Begin Routine:
        # Clear any existing key presses at the start of the routine
        kb.clearEvents()

        first_key_pressed = False


        # Initialize variables to keep track of text components and colors
        text_components = [cat, nearright, turtle,farright , farleft,auto , nearleft, hand]
        text_colors = ['white', 'white', 'white', 'white', 'white', 'white', 'white', 'white']
      Each Frame:
        # Define a function to change the color of a text component
        def change_text_color(text_index, color):
            text_components[text_index].color = color

        # Check if the first key has been pressed
        if not first_key_pressed:
            keys = kb.getKeys()

            if keys:
                # Get the first key press
                first_key = keys[0].name

                # Process the first key press (e.g., change text color to purple)
                if first_key in ['1', '2', '3', '4', '7', '8', '9', '0']:
                    button_index = ['1', '2', '3', '4', '7', '8', '9', '0'].index(first_key)
                    change_text_color(button_index, 'purple')

                # Set the variable to indicate the first key has been pressed
                first_key_pressed = True
      End Routine:
        # Initialize variables to keep track of text components and colors
        text_components = [cat, turtle, auto, hand, farleft, farright, nearleft, nearright]
        text_colors = ['white', 'white', 'white', 'white', 'white', 'white', 'white', 'white']
  Routine ITI
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    PolygonComponent fixCrossR
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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  Routine taskcue
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    ImageComponent taskCue
      image [set every repeat] = $taskCue
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine Intro
  LoopInitiator trial loopType="TrialHandler"
    conditionsFile = trialMatrices/trialMatrix_s133_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'category': 'fist', 'orientation': 1, 'taskOrientation': 0, 'stimfile': 'stim//fist1.png', 'resp1': 'far right', 'resp2': 'near right', 'resp3': 'turtle', 'resp4': 'cat', 'resp7': 'hand', 'resp8': 'far left', 'resp9': 'auto', 'resp0': 'near left'},
      {'category': 'fist', 'orientation': 2, 'taskOrientation': 0, 'stimfile': 'stim//fist2.png', 'resp1': 'turtle', 'resp2': 'near left', 'resp3': 'cat', 'resp4': 'hand', 'resp7': 'auto', 'resp8': 'far left', 'resp9': 'near right', 'resp0': 'far right'},
      {'category': 'auto', 'orientation': 2, 'taskOrientation': 0, 'stimfile': 'stim//auto2.png', 'resp1': 'far right', 'resp2': 'near right', 'resp3': 'far left', 'resp4': 'cat', 'resp7': 'turtle', 'resp8': 'hand', 'resp9': 'near left', 'resp0': 'auto'},
      {'category': 'tur', 'orientation': 3, 'taskOrientation': 0, 'stimfile': 'stim//tur3.png', 'resp1': 'auto', 'resp2': 'far right', 'resp3': 'turtle', 'resp4': 'near left', 'resp7': 'cat', 'resp8': 'far left', 'resp9': 'near right', 'resp0': 'hand'},
      {'category': 'cat', 'orientation': 1, 'taskOrientation': 0, 'stimfile': 'stim//cat1.png', 'resp1': 'near left', 'resp2': 'hand', 'resp3': 'far right', 'resp4': 'far left', 'resp7': 'cat', 'resp8': 'auto', 'resp9': 'turtle', 'resp0': 'near right'},
      {'category': 'fist', 'orientation': 4, 'taskOrientation': 1, 'stimfile': 'stim//fist4.png', 'resp1': 'auto', 'resp2': 'far left', 'resp3': 'hand', 'resp4': 'near right', 'resp7': 'cat', 'resp8': 'turtle', 'resp9': 'near left', 'resp0': 'far right'}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
    Routine taskcue
    LoopInitiator stimloop loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine stim
      Routine delay
    LoopTerminator stimloop
    Routine response
  LoopTerminator trial
  Routine ITI
