PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine stim
    ImageComponent image
      image [set every repeat] = $stimfile
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .25
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    PolygonComponent fixCrossR_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .25
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  Routine Intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = The experiment will begin soon.
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  Routine delay
    PolygonComponent fixCrossR_4
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .25
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  Routine response
    PolygonComponent fixCrossR_3
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent cat
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-.6, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = cat
      units = norm
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    TextComponent turtle
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.2, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = turtle
      units = norm
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    TextComponent auto
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-.2, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = auto
      units = norm
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    TextComponent hand
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.6, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = hand
      units = norm
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    TextComponent farleft
      color [set every repeat] = white
      letterHeight = 0.05
      pos = -.6, -.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = far left
      units = norm
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    TextComponent farright
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.6, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = far right
      units = norm
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    TextComponent nearleft
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.2, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = near left
      units = norm
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    TextComponent nearright
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-.2, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = near right
      units = norm
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    KeyboardComponent kb
      allowedKeys = '1','2','3','4','5','6','7','8'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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    CodeComponent changecolour
      Code Type = Auto->JS
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      Begin Routine:
        # Clear any existing key presses at the start of the routine
        kb.clearEvents()

        first_key_pressed = False


        # Initialize variables to keep track of text components and colors
        text_components = [cat, nearright, turtle,farright , farleft,auto , nearleft, hand]
        text_colors = ['white', 'white', 'white', 'white', 'white', 'white', 'white', 'white']
      Each Frame:
        # Define a function to change the color of a text component
        def change_text_color(text_index, color):
            text_components[text_index].color = color

        # Check if the first key has been pressed
        if not first_key_pressed:
            keys = kb.getKeys()

            if keys:
                # Get the first key press
                first_key = keys[0].name

                # Process the first key press (e.g., change text color to purple)
                if first_key in ['1', '2', '3', '4', '7', '8', '9', '0']:
                    button_index = ['1', '2', '3', '4', '7', '8', '9', '0'].index(first_key)
                    change_text_color(button_index, 'purple')

                # Set the variable to indicate the first key has been pressed
                first_key_pressed = True
      End Routine:
        # Initialize variables to keep track of text components and colors
        text_components = [cat, turtle, auto, hand, farleft, farright, nearleft, nearright]
        text_colors = ['white', 'white', 'white', 'white', 'white', 'white', 'white', 'white']
  Routine ITI
    PolygonComponent fixCrossR
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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Flow
  Routine Intro
  LoopInitiator trial loopType="TrialHandler"
    conditionsFile = rootDesignMatrix.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'category': 'cat', 'orientation': 1, 'taskOrientation': 1, 'stimfile': 'stim//cat1.png'},
      {'category': 'cat', 'orientation': 1, 'taskOrientation': 0, 'stimfile': 'stim//cat1.png'},
      {'category': 'cat', 'orientation': 2, 'taskOrientation': 1, 'stimfile': 'stim//cat2.png'},
      {'category': 'cat', 'orientation': 2, 'taskOrientation': 0, 'stimfile': 'stim//cat2.png'},
      {'category': 'cat', 'orientation': 3, 'taskOrientation': 1, 'stimfile': 'stim//cat3.png'},
      {'category': 'cat', 'orientation': 3, 'taskOrientation': 0, 'stimfile': 'stim//cat3.png'},
      {'category': 'cat', 'orientation': 4, 'taskOrientation': 1, 'stimfile': 'stim//cat4.png'},
      {'category': 'cat', 'orientation': 4, 'taskOrientation': 0, 'stimfile': 'stim//cat4.png'},
      {'category': 'auto', 'orientation': 1, 'taskOrientation': 1, 'stimfile': 'stim//auto1.png'},
      {'category': 'auto', 'orientation': 1, 'taskOrientation': 0, 'stimfile': 'stim//auto1.png'},
      {'category': 'auto', 'orientation': 2, 'taskOrientation': 1, 'stimfile': 'stim//auto2.png'},
      {'category': 'auto', 'orientation': 2, 'taskOrientation': 0, 'stimfile': 'stim//auto2.png'},
      {'category': 'auto', 'orientation': 3, 'taskOrientation': 1, 'stimfile': 'stim//auto3.png'},
      {'category': 'auto', 'orientation': 3, 'taskOrientation': 0, 'stimfile': 'stim//auto3.png'},
      {'category': 'auto', 'orientation': 4, 'taskOrientation': 1, 'stimfile': 'stim//auto4.png'},
      {'category': 'auto', 'orientation': 4, 'taskOrientation': 0, 'stimfile': 'stim//auto4.png'}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
    LoopInitiator stimloop loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine stim
      Routine delay
    LoopTerminator stimloop
    Routine response
  LoopTerminator trial
  Routine ITI
